protocol-schema: 1.0.0
author: Keoni Gandall
datetime: 2019-06-06 08:51:58.015928
protocolName: 9 96
default-values: {aspirate-flow-rate: {p1000_single: 500, p10_multi: 5, p10_single: 5, p300_multi: 150, p300_single: 150, p50_multi: 25, p50_single: 25}, aspirate-mm-from-bottom: 1, dispense-flow-rate: {p1000_single: 1000, p10_multi: 10, p10_single: 10, p300_multi: 300, p300_single: 300, p50_multi: 50, p50_single: 50}, dispense-mm-from-bottom: 0.5, touch-tip-mm-from-top: -1}
robot: {model: OT-2 Standard}
pipettes:
  p50_multi: {model: p50_multi_v1.3, mount: left}
labware:
  FG_JCVISYN3-distro-3 (slot 9): {model: 96-flat, slot: 9}
  11_tip_box: {model: opentrons-tiprack-300ul, slot: 11}
  FG_JCVISYN3-distro-3 (slot 1): {model: 96-flat, slot: 1}
  FG_JCVISYN3-distro-3 (slot 3): {model: 96-flat, slot: 3}
  FG_JCVISYN3-distro-3 (slot 10): {model: 96-deep-well, slot: 10}
  FG_JCVISYN3-distro-3 (slot 8): {model: 96-flat, slot: 8}
  FG_JCVISYN3-distro-3 (slot 4): {model: 96-flat, slot: 4}
  FG_JCVISYN3-distro-3 (slot 6): {model: 96-flat, slot: 6}
  FG_JCVISYN3-distro-3 (slot 7): {model: 96-flat, slot: 7}
  FG_JCVISYN3-distro-3 (slot 2): {model: 96-flat, slot: 2}
  FG_JCVISYN3-distro-3 (slot 5): {model: 96-flat, slot: 5}
  trash_yo: {name: Trash yo, model: fixed-trash, slot: 12}
procedure:
-
  - pick-up-tip: {labware: 11_tip_box, pipette: p50_multi, well: A1}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 5, well: A1}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A1}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 1), pipette: p50_multi, volume: 45, well: A1}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A1}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 2), pipette: p50_multi, volume: 45, well: A1}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A1}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 3), pipette: p50_multi, volume: 45, well: A1}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A1}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 4), pipette: p50_multi, volume: 45, well: A1}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A1}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 5), pipette: p50_multi, volume: 45, well: A1}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A1}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 6), pipette: p50_multi, volume: 45, well: A1}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A1}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 7), pipette: p50_multi, volume: 45, well: A1}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A1}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 8), pipette: p50_multi, volume: 45, well: A1}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A1}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 9), pipette: p50_multi, volume: 45, well: A1}
  - drop-tip: {labware: trash_yo, pipette: p50_multi, well: A1}
  - pick-up-tip: {labware: 11_tip_box, pipette: p50_multi, well: A2}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 5, well: A2}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A2}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 1), pipette: p50_multi, volume: 45, well: A2}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A2}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 2), pipette: p50_multi, volume: 45, well: A2}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A2}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 3), pipette: p50_multi, volume: 45, well: A2}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A2}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 4), pipette: p50_multi, volume: 45, well: A2}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A2}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 5), pipette: p50_multi, volume: 45, well: A2}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A2}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 6), pipette: p50_multi, volume: 45, well: A2}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A2}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 7), pipette: p50_multi, volume: 45, well: A2}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A2}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 8), pipette: p50_multi, volume: 45, well: A2}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A2}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 9), pipette: p50_multi, volume: 45, well: A2}
  - drop-tip: {labware: trash_yo, pipette: p50_multi, well: A1}
  - pick-up-tip: {labware: 11_tip_box, pipette: p50_multi, well: A3}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 5, well: A3}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A3}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 1), pipette: p50_multi, volume: 45, well: A3}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A3}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 2), pipette: p50_multi, volume: 45, well: A3}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A3}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 3), pipette: p50_multi, volume: 45, well: A3}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A3}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 4), pipette: p50_multi, volume: 45, well: A3}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A3}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 5), pipette: p50_multi, volume: 45, well: A3}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A3}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 6), pipette: p50_multi, volume: 45, well: A3}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A3}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 7), pipette: p50_multi, volume: 45, well: A3}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A3}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 8), pipette: p50_multi, volume: 45, well: A3}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A3}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 9), pipette: p50_multi, volume: 45, well: A3}
  - drop-tip: {labware: trash_yo, pipette: p50_multi, well: A1}
  - pick-up-tip: {labware: 11_tip_box, pipette: p50_multi, well: A4}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 5, well: A4}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A4}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 1), pipette: p50_multi, volume: 45, well: A4}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A4}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 2), pipette: p50_multi, volume: 45, well: A4}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A4}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 3), pipette: p50_multi, volume: 45, well: A4}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A4}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 4), pipette: p50_multi, volume: 45, well: A4}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A4}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 5), pipette: p50_multi, volume: 45, well: A4}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A4}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 6), pipette: p50_multi, volume: 45, well: A4}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A4}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 7), pipette: p50_multi, volume: 45, well: A4}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A4}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 8), pipette: p50_multi, volume: 45, well: A4}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A4}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 9), pipette: p50_multi, volume: 45, well: A4}
  - drop-tip: {labware: trash_yo, pipette: p50_multi, well: A1}
  - pick-up-tip: {labware: 11_tip_box, pipette: p50_multi, well: A5}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 5, well: A5}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A5}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 1), pipette: p50_multi, volume: 45, well: A5}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A5}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 2), pipette: p50_multi, volume: 45, well: A5}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A5}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 3), pipette: p50_multi, volume: 45, well: A5}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A5}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 4), pipette: p50_multi, volume: 45, well: A5}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A5}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 5), pipette: p50_multi, volume: 45, well: A5}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A5}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 6), pipette: p50_multi, volume: 45, well: A5}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A5}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 7), pipette: p50_multi, volume: 45, well: A5}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A5}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 8), pipette: p50_multi, volume: 45, well: A5}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A5}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 9), pipette: p50_multi, volume: 45, well: A5}
  - drop-tip: {labware: trash_yo, pipette: p50_multi, well: A1}
  - pick-up-tip: {labware: 11_tip_box, pipette: p50_multi, well: A6}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 5, well: A6}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A6}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 1), pipette: p50_multi, volume: 45, well: A6}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A6}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 2), pipette: p50_multi, volume: 45, well: A6}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A6}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 3), pipette: p50_multi, volume: 45, well: A6}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A6}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 4), pipette: p50_multi, volume: 45, well: A6}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A6}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 5), pipette: p50_multi, volume: 45, well: A6}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A6}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 6), pipette: p50_multi, volume: 45, well: A6}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A6}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 7), pipette: p50_multi, volume: 45, well: A6}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A6}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 8), pipette: p50_multi, volume: 45, well: A6}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A6}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 9), pipette: p50_multi, volume: 45, well: A6}
  - drop-tip: {labware: trash_yo, pipette: p50_multi, well: A1}
  - pick-up-tip: {labware: 11_tip_box, pipette: p50_multi, well: A7}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 5, well: A7}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A7}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 1), pipette: p50_multi, volume: 45, well: A7}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A7}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 2), pipette: p50_multi, volume: 45, well: A7}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A7}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 3), pipette: p50_multi, volume: 45, well: A7}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A7}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 4), pipette: p50_multi, volume: 45, well: A7}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A7}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 5), pipette: p50_multi, volume: 45, well: A7}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A7}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 6), pipette: p50_multi, volume: 45, well: A7}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A7}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 7), pipette: p50_multi, volume: 45, well: A7}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A7}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 8), pipette: p50_multi, volume: 45, well: A7}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A7}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 9), pipette: p50_multi, volume: 45, well: A7}
  - drop-tip: {labware: trash_yo, pipette: p50_multi, well: A1}
  - pick-up-tip: {labware: 11_tip_box, pipette: p50_multi, well: A8}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 5, well: A8}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A8}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 1), pipette: p50_multi, volume: 45, well: A8}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A8}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 2), pipette: p50_multi, volume: 45, well: A8}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A8}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 3), pipette: p50_multi, volume: 45, well: A8}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A8}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 4), pipette: p50_multi, volume: 45, well: A8}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A8}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 5), pipette: p50_multi, volume: 45, well: A8}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A8}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 6), pipette: p50_multi, volume: 45, well: A8}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A8}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 7), pipette: p50_multi, volume: 45, well: A8}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A8}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 8), pipette: p50_multi, volume: 45, well: A8}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A8}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 9), pipette: p50_multi, volume: 45, well: A8}
  - drop-tip: {labware: trash_yo, pipette: p50_multi, well: A1}
  - pick-up-tip: {labware: 11_tip_box, pipette: p50_multi, well: A9}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 5, well: A9}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A9}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 1), pipette: p50_multi, volume: 45, well: A9}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A9}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 2), pipette: p50_multi, volume: 45, well: A9}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A9}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 3), pipette: p50_multi, volume: 45, well: A9}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A9}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 4), pipette: p50_multi, volume: 45, well: A9}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A9}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 5), pipette: p50_multi, volume: 45, well: A9}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A9}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 6), pipette: p50_multi, volume: 45, well: A9}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A9}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 7), pipette: p50_multi, volume: 45, well: A9}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A9}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 8), pipette: p50_multi, volume: 45, well: A9}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A9}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 9), pipette: p50_multi, volume: 45, well: A9}
  - drop-tip: {labware: trash_yo, pipette: p50_multi, well: A1}
  - pick-up-tip: {labware: 11_tip_box, pipette: p50_multi, well: A10}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 5, well: A10}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A10}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 1), pipette: p50_multi, volume: 45, well: A10}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A10}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 2), pipette: p50_multi, volume: 45, well: A10}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A10}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 3), pipette: p50_multi, volume: 45, well: A10}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A10}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 4), pipette: p50_multi, volume: 45, well: A10}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A10}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 5), pipette: p50_multi, volume: 45, well: A10}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A10}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 6), pipette: p50_multi, volume: 45, well: A10}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A10}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 7), pipette: p50_multi, volume: 45, well: A10}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A10}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 8), pipette: p50_multi, volume: 45, well: A10}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A10}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 9), pipette: p50_multi, volume: 45, well: A10}
  - drop-tip: {labware: trash_yo, pipette: p50_multi, well: A1}
  - pick-up-tip: {labware: 11_tip_box, pipette: p50_multi, well: A11}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 5, well: A11}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A11}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 1), pipette: p50_multi, volume: 45, well: A11}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A11}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 2), pipette: p50_multi, volume: 45, well: A11}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A11}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 3), pipette: p50_multi, volume: 45, well: A11}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A11}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 4), pipette: p50_multi, volume: 45, well: A11}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A11}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 5), pipette: p50_multi, volume: 45, well: A11}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A11}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 6), pipette: p50_multi, volume: 45, well: A11}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A11}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 7), pipette: p50_multi, volume: 45, well: A11}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A11}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 8), pipette: p50_multi, volume: 45, well: A11}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A11}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 9), pipette: p50_multi, volume: 45, well: A11}
  - drop-tip: {labware: trash_yo, pipette: p50_multi, well: A1}
  - pick-up-tip: {labware: 11_tip_box, pipette: p50_multi, well: A12}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 5, well: A12}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A12}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 1), pipette: p50_multi, volume: 45, well: A12}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A12}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 2), pipette: p50_multi, volume: 45, well: A12}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A12}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 3), pipette: p50_multi, volume: 45, well: A12}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A12}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 4), pipette: p50_multi, volume: 45, well: A12}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A12}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 5), pipette: p50_multi, volume: 45, well: A12}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A12}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 6), pipette: p50_multi, volume: 45, well: A12}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A12}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 7), pipette: p50_multi, volume: 45, well: A12}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A12}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 8), pipette: p50_multi, volume: 45, well: A12}
  - aspirate: {labware: FG_JCVISYN3-distro-3 (slot 10), pipette: p50_multi, volume: 45, well: A12}
  - dispense: {labware: FG_JCVISYN3-distro-3 (slot 9), pipette: p50_multi, volume: 45, well: A12}
  - drop-tip: {labware: trash_yo, pipette: p50_multi, well: A1}
